opentrons/protocol-designer 5.2.6
schemaVersion: 3
protocolName: AA standard preparation
author: WF
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p300_single_gen2: {mount: right}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Tip Rack 300 µL: {definitionId: opentrons/opentrons_96_tiprack_300ul/1, slot: 1}
  Std: {definitionId: opentrons/opentrons_24_tuberack_eppendorf_1.5ml_safelock_snapcap/1, slot: 7}
  reagents: {definitionId: opentrons/opentrons_10_tuberack_falcon_4x50ml_6x15ml_conical/1, slot: 10}
pipetteTiprackAssignments:
  p300_single_gen2: opentrons/opentrons_96_tiprack_300ul/1
ingredients:
  - Diluent E2
  - STD1
  - Sample diluent AA
ingredLocations:
  reagents:
    Diluent E2 {volume: 30000}: A3
    Sample diluent AA {volume: 20000}: B4
  Std:
    STD1 {volume: 600}: A1
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 250
  path: single
  changeTip: once
  aspirate_labware: reagents
  aspirate_wells: B4
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  aspirate_mmFromBottom: 20
  dispense_labware: Std
  dispense_wells: B1, A2, B2, A3-A6
  dispense_flowRate: 200
  dispense_mmFromBottom: 5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 250
  path: single
  changeTip: always
  aspirate_labware: Std
  aspirate_wells: A1
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  aspirate_mmFromBottom: 3
  dispense_labware: Std
  dispense_wells: A2
  dispense_flowRate: 200
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 250
  dispense_mmFromBottom: 3
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 250
  path: single
  changeTip: always
  aspirate_labware: Std
  aspirate_wells: A2
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  aspirate_mmFromBottom: 3
  dispense_labware: Std
  dispense_wells: A3
  dispense_flowRate: 200
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 250
  dispense_mmFromBottom: 3
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 250
  path: single
  changeTip: always
  aspirate_labware: Std
  aspirate_wells: A3
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  aspirate_mmFromBottom: 3
  dispense_labware: Std
  dispense_wells: A4
  dispense_flowRate: 200
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 250
  dispense_mmFromBottom: 3
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 250
  path: single
  changeTip: always
  aspirate_labware: Std
  aspirate_wells: A4
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  aspirate_mmFromBottom: 3
  dispense_labware: Std
  dispense_wells: A5
  dispense_flowRate: 200
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 250
  dispense_mmFromBottom: 3
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 250
  path: single
  changeTip: always
  aspirate_labware: Std
  aspirate_wells: A5
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  aspirate_mmFromBottom: 3
  dispense_labware: Std
  dispense_wells: A6
  dispense_flowRate: 200
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 250
  dispense_mmFromBottom: 3
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 250
  path: single
  changeTip: always
  aspirate_labware: Std
  aspirate_wells: A6
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  aspirate_mmFromBottom: 3
  dispense_labware: Std
  dispense_wells: B1
  dispense_flowRate: 200
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 250
  dispense_mmFromBottom: 3
  blowout_checkbox: true
  blowout_location: dest_well
labwareDefinitions:
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commands:
- pickUpTip: {pipette: p300_single_gen2, labware: Opentrons 96 Tip Rack 300 µL, well: A1}
- aspirate: {pipette: p300_single_gen2, volume: 250, labware: reagents, well: B4, offsetFromBottomMm: 20, flowRate: 46.43}
- dispense: {pipette: p300_single_gen2, volume: 250, labware: Std, well: B1, offsetFromBottomMm: 5, flowRate: 200}
- blowout: {pipette: p300_single_gen2, labware: Std, well: B1, flowRate: 200, offsetFromBottomMm: 37.8}
- aspirate: {pipette: p300_single_gen2, volume: 250, labware: reagents, well: B4, offsetFromBottomMm: 20, flowRate: 46.43}
- dispense: {pipette: p300_single_gen2, volume: 250, labware: Std, well: A2, offsetFromBottomMm: 5, flowRate: 200}
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