opentrons/protocol-designer 5.2.6
schemaVersion: 3
protocolName: Dispensing standard AA to masterplates
author: WF
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p300_single_gen2: {mount: right}
  p300_multi_gen2: {mount: left}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Tip Rack 300 µL: {definitionId: opentrons/opentrons_96_tiprack_300ul/1, slot: 1}
  masterplate1: {definitionId: opentrons/biorad_96_wellplate_200ul_pcr/1, slot: 8}
  masterplate2: {definitionId: opentrons/biorad_96_wellplate_200ul_pcr/1, slot: 9}
  std: {definitionId: opentrons/opentrons_24_tuberack_eppendorf_1.5ml_safelock_snapcap/1, slot: 7}
  ELISA1: {definitionId: opentrons/corning_96_wellplate_360ul_flat/1, slot: 5}
  ELISA2: {definitionId: opentrons/corning_96_wellplate_360ul_flat/1, slot: 6}
  Opentrons 96 Tip Rack 300 µL (1): {definitionId: opentrons/opentrons_96_tiprack_300ul/1, slot: 3}
  Opentrons 96 Tip Rack 300 µL (2): {definitionId: opentrons/opentrons_96_tiprack_300ul/1, slot: 4}
  reagents: {definitionId: opentrons/usascientific_12_reservoir_22ml/1, slot: 2}
pipetteTiprackAssignments:
  p300_single_gen2: opentrons/opentrons_96_tiprack_300ul/1
  p300_multi_gen2: opentrons/opentrons_96_tiprack_300ul/1
ingredients:
  - Std1
  - std2
  - std3
  - std4
  - std5
  - std6
  - std7
  - std8
  - Samples1: {serialize: true}
  - SAmples2: {serialize: true}
  - HRP
ingredLocations:
  masterplate2:
    SAmples2 {volume: 200}: A2-H2, A3-H3, A4-H4, A5-H5, A6-H6, A7-H7, A8-H8, A9-H9, A10-H10, A11-H11, A12-H12
  std:
    Std1 {volume: 300}: A1
    std2 {volume: 300}: A2
    std3 {volume: 300}: A3
    std4 {volume: 300}: A4
    std5 {volume: 300}: A5
    std6 {volume: 300}: A6
    std7 {volume: 300}: B1
    std8 {volume: 300}: B2
  masterplate1:
    Samples1 {volume: 200}: A2-H2, A3-H3, A4-H4, A5-H5, A6-H6, A7-H7, A8-H8, A9-H9, A10-H10, A11-H11, A12-H12
  reagents:
    HRP {volume: 6000}: A1
    HRP {volume: 12000}: A7
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 200
  path: single
  changeTip: always
  aspirate_labware: std
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1.5
  dispense_labware: masterplate1
  dispense_wells: A1
  dispense_flowRate: 200
  dispense_mmFromBottom: 6
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 200
  path: single
  changeTip: always
  aspirate_labware: std
  aspirate_wells: A2
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  aspirate_mmFromBottom: 1.5
  dispense_labware: masterplate1
  dispense_wells: B1
  dispense_flowRate: 200
  dispense_mmFromBottom: 6
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 200
  path: single
  changeTip: always
  aspirate_labware: std
  aspirate_wells: A3
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  aspirate_mmFromBottom: 1.5
  dispense_labware: masterplate1
  dispense_wells: C1
  dispense_flowRate: 200
  dispense_mmFromBottom: 6
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 200
  path: single
  changeTip: always
  aspirate_labware: std
  aspirate_wells: A4
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  aspirate_mmFromBottom: 1.5
  dispense_labware: masterplate1
  dispense_wells: D1
  dispense_flowRate: 200
  dispense_mmFromBottom: 6
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 200
  path: single
  changeTip: always
  aspirate_labware: std
  aspirate_wells: A5
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  aspirate_mmFromBottom: 1.5
  dispense_labware: masterplate1
  dispense_wells: E1
  dispense_flowRate: 200
  dispense_mmFromBottom: 6
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 200
  path: single
  changeTip: always
  aspirate_labware: std
  aspirate_wells: A6
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  aspirate_mmFromBottom: 1.5
  dispense_labware: masterplate1
  dispense_wells: F1
  dispense_flowRate: 200
  dispense_mmFromBottom: 6
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 200
  path: single
  changeTip: always
  aspirate_labware: std
  aspirate_wells: B1
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  aspirate_mmFromBottom: 1.5
  dispense_labware: masterplate1
  dispense_wells: G1
  dispense_flowRate: 200
  dispense_mmFromBottom: 6
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 200
  path: single
  changeTip: always
  aspirate_labware: std
  aspirate_wells: B2
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  aspirate_mmFromBottom: 1.5
  dispense_labware: masterplate1
  dispense_wells: H1
  dispense_flowRate: 200
  dispense_mmFromBottom: 6
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 50
  path: single
  changeTip: always
  aspirate_labware: masterplate1
  aspirate_wells: A1-A12
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  aspirate_mmFromBottom: 4.5
  dispense_labware: ELISA1
  dispense_wells: A1-A12
  dispense_flowRate: 200
  dispense_mmFromBottom: 4.5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 50
  path: single
  changeTip: once
  aspirate_labware: reagents
  aspirate_wells: A7
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  aspirate_mmFromBottom: 4.5
  dispense_labware: ELISA1
  dispense_wells: A1-A11
  dispense_flowRate: 200
  dispense_mmFromBottom: 5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: pause
  stepName: pause
  pauseAction: untilResume
  pauseMessage: check if tips removed
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 50
  path: single
  changeTip: once
  aspirate_labware: reagents
  aspirate_wells: A7
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  aspirate_mmFromBottom: 4.5
  dispense_labware: ELISA1
  dispense_wells: A12
  dispense_flowRate: 200
  dispense_mmFromBottom: 5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 50
  path: single
  changeTip: always
  aspirate_labware: masterplate1
  aspirate_wells: A1
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  aspirate_mmFromBottom: 5
  dispense_labware: ELISA2
  dispense_wells: A1
  dispense_flowRate: 200
  dispense_mmFromBottom: 5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 50
  path: single
  changeTip: always
  aspirate_labware: masterplate2
  aspirate_wells: A2-A12
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  aspirate_mmFromBottom: 4.5
  dispense_labware: ELISA2
  dispense_wells: A2-A12
  dispense_flowRate: 200
  dispense_mmFromBottom: 5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 50
  path: single
  changeTip: once
  aspirate_labware: reagents
  aspirate_wells: A7
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  aspirate_mmFromBottom: 4.5
  dispense_labware: ELISA2
  dispense_wells: A1-A11
  dispense_flowRate: 200
  dispense_mmFromBottom: 5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: pause
  stepName: pause
  pauseAction: untilResume
  pauseMessage: check if tips removed
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 50
  path: single
  changeTip: once
  aspirate_labware: reagents
  aspirate_wells: A7
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  aspirate_mmFromBottom: 4.5
  dispense_labware: ELISA2
  dispense_wells: A12
  dispense_flowRate: 200
  dispense_mmFromBottom: 5
  blowout_checkbox: true
  blowout_location: dest_well
labwareDefinitions:
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commands:
- pickUpTip: {pipette: p300_single_gen2, labware: Opentrons 96 Tip Rack 300 µL, well: A1}
- aspirate: {pipette: p300_single_gen2, volume: 200, labware: std, well: A1, offsetFromBottomMm: 1.5, flowRate: 46.43}
- dispense: {pipette: p300_single_gen2, volume: 200, labware: masterplate1, well: A1, offsetFromBottomMm: 6, flowRate: 200}
- dropTip: {pipette: p300_single_gen2, labware: Trash, well: A1}
- pickUpTip: {pipette: p300_single_gen2, labware: Opentrons 96 Tip Rack 300 µL, well: B1}
- aspirate: {pipette: p300_single_gen2, volume: 200, labware: std, well: A2, offsetFromBottomMm: 1.5, flowRate: 46.43}
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